PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1, -1, -1]
  expName = filler
  logging level = debug
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Routines
  Routine trial
    TextComponent text
      durationEstim = 60
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3600
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      text:
        The researcher is calibrating the scanner and getting the experiments ready.

        Please hold still and the experiments will start soon.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      durationEstim = 60
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3600
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Flow
  Routine trial
